PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1710, 1112]
  expName = Delay Discounting
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay)  + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/sakshi/Downloads/Delay Discounting_Conditioning - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('reward_today', 11), ('future_reward', 30), ('delay', 7)]),
      OrderedDict([('reward_today', 15), ('future_reward', 35), ('delay', 13)]),
      OrderedDict([('reward_today', 27), ('future_reward', 50), ('delay', 21)]),
      OrderedDict([('reward_today', 40), ('future_reward', 55), ('delay', 62)]),
      OrderedDict([('reward_today', 49), ('future_reward', 60), ('delay', 89)]),
      OrderedDict([('reward_today', 67), ('future_reward', 76), ('delay', 119)]),
      OrderedDict([('reward_today', 78), ('future_reward', 80), ('delay', 162)])]
    Routine trial
  LoopTerminator trials
