PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1710, 1112]
  expName = intentional_bonding
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent Polygon
      draggable = True
      fillColor = green
      lineColor = green
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 3.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4.0
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  Routine beep
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    SoundComponent sound_1
      sound [set every repeat] = $freq
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
      syncScreenRefresh = False
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  Routine response
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    TextComponent display_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Report the delay between the key press and beep sound (0-1000) in ms
        Click submit after entering the value.
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/sakshi/Downloads/Intentional_bonding_trials - Sheet1.csv
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('delay', 0.1), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.4), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.7), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.1), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.4), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.7), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.1), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.4), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.7), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.1), ('freq', 400), ('condition', 'exp')])]
    Routine trial
    Routine beep
    Routine response
  LoopTerminator trials
